PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'Age': '', 'Gender': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  color = $[1,1,1]
  expName = SST2
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine fixation
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    ImageComponent image
      image = images/fix.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.250
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Reset key response each trial
        key_resp.keys = None
        key_resp.rt = None
  Routine feedback
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = fb_dur
      text [set every repeat] = $feedback
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  Routine Feedback
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    TextComponent fdback_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $feedback
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  Routine block_feedback
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    CodeComponent fb_code
      Code Type = Auto->JS
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      Begin Routine:
        # ---- Average GO RT ----
        if len(go_rts) > 0:
            avg_go_rt = sum(go_rts) / len(go_rts)
        else:
            avg_go_rt = 0

        avg_go_rt_ms = int(avg_go_rt * 1000)

        # ---- Proportion missed GO ----
        if go_trials > 0:
            prop_missed_go = go_omissions / go_trials
        else:
            prop_missed_go = 0

        # ---- Stop accuracy ----
        if stop_trials > 0:
            percent_correct_cancels = (correct_cancels / stop_trials) * 100
        else:
            percent_correct_cancels = 0

        # ---- FINAL FEEDBACK STRING ----
        feedback_msg = (
            "Average response time (GO trials):\n"
            f"{avg_go_rt_ms} ms\n\n"
            "Proportion missed go:\n"
            f"{prop_missed_go:.2f} (should be 0)\n\n"
            "Percentage of correctly cancelled STOP trials:\n"
            f"{percent_correct_cancels:.1f}% (should be close to 50%)"
            " "
            "Press SPACEBAR to begin the experiment"
        )

        # ---- Reset for next block ----
        go_rts = []
        go_omissions = 0
        go_trials = 0
        stop_trials = 0
        correct_cancels = 0
    TextComponent fb_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $feedback_msg
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instruct_2
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nevertheless, it is really important that you do not wait for the stop signal to occur and that you respond as quickly and as accurately as possible to the white arrows.

        After all, if you start waiting for the red stop signals, then the program will delay their presentation. This will result in long reaction times.

        We will start with a short practice block in which you will receive immediate feedback. You will no longer receive immediate feedback in the experimental phase.

        However, at the end of each experimental block, there will be a 15 second break. During this break, we will show you some information about your mean performance in the previous block.

        The experiment consists of 1 practice block and 4 experimental blocks

        Press "SPACEBAR" to begin the experiment
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruct_1
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        However, on some trials (stop-signal trials) the arrows will turn red after a variable delay. You have to stop your response when this happens.

        On approximately half of the stop-signal trials, the red stop signal will appear soon and you will notice that it will be easy to stop your response.

        On the other half of the trials, the red stop signals will appear late and it will become very difficult or even impossible to stop your response.

        Press "SPACEBAR" to continue
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome
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    TextComponent Welcome_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = "WELCOME"
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  Routine Stimulus
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    ImageComponent go_arrow
      image [set every repeat] = $go_image
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
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    ImageComponent stop_arrow
      image [set every repeat] = $stop_image
      opacity [set every repeat] = is_stop
      size = (1, 1)
      startVal [time (s)] = SSD
      stopVal [duration (s)] = 1.25
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
      storeCorrect = True
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    CodeComponent SSD_code
      Code Type = Auto->JS
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      Begin Experiment:
        SSD = 0.20       # starting SSD (200 ms)
        SSD_step = 0.05
        SSD_min = 0.05
        SSD_max = 0.9
        MAXRT = 1.25
      End Routine:
        # Only update SSD on STOP trials
        if is_stop == 1:

            # Correct stop (no response) → harder
            if key_resp.keys is None:
                SSD += SSD_step
            else:
                # Failed stop → easier
                SSD -= SSD_step

            # Keep SSD within bounds
            SSD = max(SSD_min, min(SSD, SSD_max))
    CodeComponent block_fb_code
      Code Type = Auto->JS
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      Begin Experiment:
        # ---- BLOCK COUNTERS ----
        go_rts = []
        go_omissions = 0
        go_trials = 0

        stop_trials = 0
        correct_cancels = 0
      Begin Routine:
        key_resp.keys = None
        key_resp.rt = None
      End Routine:
        # GO trials
        if is_stop == 0:
            go_trials += 1
            if key_resp.keys is None:
                go_omissions += 1
            else:
                go_rts.append(key_resp.rt)

        # STOP trials
        if is_stop == 1:
            stop_trials += 1
            if key_resp.keys is None:
                correct_cancels += 1
    CodeComponent feedback_code
      Code Type = Auto->JS
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      End Routine:
        # ALWAYS initialize
        feedback = " "

        # STOP trials
        if is_stop == 1 and key_resp.keys is None:
            feedback = "Correct"

        elif is_stop == 1 and key_resp.keys is not None:
            feedback = "Remember: try to stop"

        # GO trials
        elif is_stop == 0 and key_resp.keys is None:
            feedback = "Too slow"

        elif is_stop == 0 and key_resp.keys == corr_resp:
            feedback = "Correct"

        elif is_stop == 0 and key_resp.keys != corr_resp:
            feedback = "Incorrect response"

        # ----- GO RT collection -----
        if is_stop == 0 and key_resp.keys == corr_resp:
            thisExp.addData('go_rt', key_resp.rt)
        else:
            thisExp.addData('go_rt', None)

        # ----- STOP outcome -----
        if is_stop == 1 and key_resp.keys is None:
            thisExp.addData('stop_success', 1)
        elif is_stop == 1:
            thisExp.addData('stop_success', 0)
        else:
            thisExp.addData('stop_success', None)

        # ----- SSD logging -----
        thisExp.addData('SSD', SSD)
  Routine Thank_you
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    TextComponent thankyou_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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      text:
        “Thank you for participating.

          The task is now complete.

           Please inform the experimenter.”
  Routine Instruction
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    TextComponent Inst_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $text
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    KeyboardComponent key_resp_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator Trial_loop loopType="TrialHandler"
    conditionsFile = instructions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'text': 'Your main task is to respond to white arrows (with a black border) that appear on the screen.\n\nPress the LEFT ARROW KEY with the right index finger when you see a LEFT ARROW and press the RIGHT ARROW KEY with the right ring finger when you see a RIGHT ARROW.\n\nThus, left arrow = left key and right arrow = right key. \nPress "SPACEBAR" to continue'},
      {'text': 'However, on some trials (stop-signal trials) the arrows will turn red after a variable delay. You have to stop your response when this happens.\n\nOn approximately half of the stop-signal trials, the red stop signal will appear soon and you will notice that it will be easy to stop your response.\n\nOn the other half of the trials, the red stop signals will appear late and it will become very difficult or even impossible to stop your response.\n\nPress "SPACEBAR" to continue'},
      {'text': 'Nevertheless, it is really important that you do not wait for the stop signal to occur and that you respond as quickly and as accurately as possible to the white arrows.\n\nAfter all, if you start waiting for the red stop signals, then the program will delay their presentation. This will result in long reaction times.\n\nWe will start with a short practice block in which you will receive immediate feedback. You will no longer receive immediate feedback in the experimental phase.\n\nPress "SPACEBAR" to continue'},
      {'text': 'However, at the end of each experimental block, there will be a 15 second break. During this break, we will show you some information about your mean performance in the previous block.\n\nThe experiment consists of 1 practice block and 4 experimental blocks\n\nPress "SPACEBAR" to begin the experiment'}]
    Routine Instruction
  LoopTerminator Trial_loop
  LoopInitiator practice_trial_loop loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 4
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    conditions:
      [{'go_image': 'images/go_left.png', 'stop_image': 'images/stop_left.png', 'corr_resp': 'left', 'is_stop': 0},
      {'go_image': 'images/go_left.png', 'stop_image': 'images/stop_left.png', 'corr_resp': 'left', 'is_stop': 0},
      {'go_image': 'images/go_left.png', 'stop_image': 'images/stop_left.png', 'corr_resp': 'left', 'is_stop': 0},
      {'go_image': 'images/go_left.png', 'stop_image': 'images/stop_left.png', 'corr_resp': 'None', 'is_stop': 1},
      {'go_image': 'images/go_right.png', 'stop_image': 'images/stop_right.png', 'corr_resp': 'right', 'is_stop': 0},
      {'go_image': 'images/go_right.png', 'stop_image': 'images/stop_right.png', 'corr_resp': 'right', 'is_stop': 0},
      {'go_image': 'images/go_right.png', 'stop_image': 'images/stop_right.png', 'corr_resp': 'right', 'is_stop': 0},
      {'go_image': 'images/go_right.png', 'stop_image': 'images/stop_right.png', 'corr_resp': 'None', 'is_stop': 1}]
    Routine fixation
    Routine Stimulus
    Routine Feedback
  LoopTerminator practice_trial_loop
  Routine block_feedback
  LoopInitiator exp_trial_1 loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'go_image': 'images/go_left.png', 'stop_image': 'images/stop_left.png', 'corr_resp': 'left', 'is_stop': 0},
      {'go_image': 'images/go_left.png', 'stop_image': 'images/stop_left.png', 'corr_resp': 'left', 'is_stop': 0},
      {'go_image': 'images/go_left.png', 'stop_image': 'images/stop_left.png', 'corr_resp': 'left', 'is_stop': 0},
      {'go_image': 'images/go_left.png', 'stop_image': 'images/stop_left.png', 'corr_resp': 'None', 'is_stop': 1},
      {'go_image': 'images/go_right.png', 'stop_image': 'images/stop_right.png', 'corr_resp': 'right', 'is_stop': 0},
      {'go_image': 'images/go_right.png', 'stop_image': 'images/stop_right.png', 'corr_resp': 'right', 'is_stop': 0},
      {'go_image': 'images/go_right.png', 'stop_image': 'images/stop_right.png', 'corr_resp': 'right', 'is_stop': 0},
      {'go_image': 'images/go_right.png', 'stop_image': 'images/stop_right.png', 'corr_resp': 'None', 'is_stop': 1}]
    Routine fixation
    Routine Stimulus
  LoopTerminator exp_trial_1
  Routine block_feedback
  LoopInitiator exp_trials_2 loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 8
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    conditions:
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    Routine fixation
    Routine Stimulus
  LoopTerminator exp_trials_2
  Routine block_feedback
  LoopInitiator exp_trials_3 loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 8
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    conditions:
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    Routine fixation
    Routine Stimulus
  LoopTerminator exp_trials_3
  Routine block_feedback
  LoopInitiator exp_trials_4 loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 8
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    conditions:
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    Routine fixation
    Routine Stimulus
  LoopTerminator exp_trials_4
  Routine block_feedback
  Routine Thank_you
